PsychoPy2experiment version="2024.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = remlure_localizer
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Welcome
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    CodeComponent init_code
      Code Type = Auto->JS
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      Before Experiment:
        #### LOAD NECESSARY PACKAGES ####
        import random
        import pandas as pd
        import numpy as np
        import os

        # Set participant number
        # need this to create a folder with each subs design matrix
        participant_number = "test"  # Edward, if you put this code in PsychoPy this would need to be changed to refelect the expInfo
        # expInfo['participant']

        # set directory path
        _thisDir = os.path.dirname(os.path.abspath(__file__))
        print("file:", __file__)
        print("abspath:", os.path.abspath(__file__))
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
