PsychoPy2experiment version="2024.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'phase': 'maintask'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = remlure_maintask
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Encode
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    PolygonComponent encode_fixation
      fillColor = dimgray
      lineColor = dimgray
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent img_1_left
      image [set every repeat] = $encode_1_img
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent img_2_right
      image [set every repeat] = $encode_2_img
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Manipulate
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    CodeComponent cue_position_code
      Code Type = Auto->JS
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      Begin Routine:
        if cue_position == "left":
            cuepos = (-0.3, 0)
        elif cue_position == "right":
            cuepos = (0.3, 0)
        print("cue_position = ", cue_position)
    ImageComponent manipulate_cue
      image [set every repeat] = $replace_img
      pos [set every repeat] = cuepos
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent manipulate_fixation
      fillColor = dimgray
      lineColor = dimgray
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Probe
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        print("probesubtype = ", probe_subtype)
        print("trial = ", trial_num)

        if probe_subtype in ["cued", "uncued", "replacement"]:
            correct_ans = "f"
        else:
            correct_ans = "j"
      End Routine:
        keypressed = _probe_keyResp_allKeys[-1].name
        if keypressed == correct_ans:
            print("correct!")
            corr += 1
    ImageComponent probe_image
      image [set every repeat] = $probe_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent probe_keyResp
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent yesKey_text
      letterHeight = 0.05
      pos = (-0.2, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        [F]
        YES
    TextComponent noKey_text
      letterHeight = 0.05
      pos = (0.2, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        [J]
        NO
  Routine Delay_4000
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    PolygonComponent delay_fixation_4000
      fillColor = dimgray
      lineColor = dimgray
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine Delay_2000
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    PolygonComponent delay_fixation_2000
      fillColor = dimgray
      lineColor = dimgray
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Welcome
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    CodeComponent init_code
      Code Type = Py
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      Before Experiment:
        #### LOAD NECESSARY PACKAGES ####
        import random
        import pandas as pd
        import numpy as np
        import os
        from collections import Counter
        import copy

        # Set participant number
        # need this to create a folder with each subs design matrix
        participant_number = "test"  # Edward, if you put this code in PsychoPy this would need to be changed to refelect the expInfo
        # expInfo['participant']

        # set directory path
        try:
            _thisDir = os.path.dirname(os.path.abspath(__file__))
        except NameError:
            print("__file__ does not exist")
            _thisDir = os.getcwd()

        # create a subject specific folder to save all lists
        list_foldername = os.path.join(_thisDir, "subject lists", f"sub-{participant_number}")

        phase_subFolder = "main_task"

        # Create the subject folder if it doesn't exist
        if not os.path.exists(list_foldername):
            os.makedirs(list_foldername)
            print(f"List folder successfully created for sub-{participant_number}")
        else:
            print(f"List folder already exists for sub-{participant_number}...")

        # Create each phase subfolder within the subject's folder
        phase_folder_path = os.path.join(list_foldername, phase_subFolder)
        # Create the phase folder
        if not os.path.exists(phase_folder_path):
            os.makedirs(phase_folder_path)
            print(f"Created phase folder: {phase_subFolder}")
        else:
            print(f"Phase folder '{phase_subFolder}' already exists...")

        #### SETUP STIMULUS MASTER LISTS ####
        # set a random seed
        random.seed()

        # read in the master stimulus lists
        faces_mainTask_list_infile = (
            _thisDir
            + os.sep
            + "stimuli"
            + os.sep
            + "csvs"
            + os.sep
            + "main_task"
            + os.sep
            + "faces_mainTask.csv"
        )

        places_mainTask_list_infile = (
            _thisDir
            + os.sep
            + "stimuli"
            + os.sep
            + "csvs"
            + os.sep
            + "main_task"
            + os.sep
            + "places_mainTask.csv"
        )

        fruits_mainTask_list_infile = (
            _thisDir
            + os.sep
            + "stimuli"
            + os.sep
            + "csvs"
            + os.sep
            + "main_task"
            + os.sep
            + "fruits_mainTask.csv"
        )

        faces_novel_list_infile = (
            _thisDir
            + os.sep
            + "stimuli"
            + os.sep
            + "csvs"
            + os.sep
            + "main_task"
            + os.sep
            + "faces_novel.csv"
        )

        places_novel_list_infile = (
            _thisDir
            + os.sep
            + "stimuli"
            + os.sep
            + "csvs"
            + os.sep
            + "main_task"
            + os.sep
            + "places_novel.csv"
        )

        fruits_novel_list_infile = (
            _thisDir
            + os.sep
            + "stimuli"
            + os.sep
            + "csvs"
            + os.sep
            + "main_task"
            + os.sep
            + "fruits_novel.csv"
        )

        # open stimulus mater files
        faces_mainTask_list = pd.read_csv(faces_mainTask_list_infile, header=None).loc[:,0].tolist()   # 20 count
        places_mainTask_list = pd.read_csv(places_mainTask_list_infile, header=None).loc[:,0].tolist()    # 20 count
        fruits_mainTask_list = pd.read_csv(fruits_mainTask_list_infile, header=None).loc[:,0].tolist()     # 20 count

        faces_novel_list = pd.read_csv(faces_novel_list_infile, header=None).loc[:,0].tolist()    # 77 count
        places_novel_list = pd.read_csv(places_novel_list_infile, header=None).loc[:,0].tolist()    # 75 count
        fruits_novel_list = pd.read_csv(fruits_novel_list_infile, header=None).loc[:,0].tolist()    # 77 count


        #### CREATE MAIN TASK LISTS ####
        # Define some experiment variables
        total_trials = 144    # number of trials
        run_len = 24    # trials per run
        num_runs = 6    # number of runs
        num_oper_per_run = run_len // 3    # 3 operations

        # create the encoding category labels for item 1 (left of screen) and item 2 (right of screen)
        encode_1_cat = (
            ["faces"] * 4
            + ["places"] * 4
            + ["faces"] * 4
            + ["fruits"] * 4
            + ["places"] * 4
            + ["fruits"] * 4
        ) * 6
        encode_2_cat = (
            ["places"] * 4
            + ["faces"] * 4
            + ["fruits"] * 4
            + ["faces"] * 4
            + ["fruits"] * 4
            + ["places"] * 4
        ) * 6

        # intiate df
        mainTask_df = pd.DataFrame({"encode_1_cat": encode_1_cat, "encode_2_cat": encode_2_cat})

        # create lst of operations
        operation_list_run1 = (["maintain"] * 2 + ["suppress"] * 2 + ["replace"] * 2) * 4
        operation_list_run2 = (["suppress"] * 2 + ["replace"] * 2 + ["maintain"] * 2) * 4
        operation_list_run3 = (["replace"] * 2 + ["maintain"] * 2 + ["suppress"] * 2) * 4
        operation_list_run4 = (["maintain"] * 2 + ["suppress"] * 2 + ["replace"] * 2) * 4
        operation_list_run5 = (["suppress"] * 2 + ["replace"] * 2 + ["maintain"] * 2) * 4
        operation_list_run6 = (["replace"] * 2 + ["maintain"] * 2 + ["suppress"] * 2) * 4

        operation_list_allRuns = (
            operation_list_run1
            + operation_list_run2
            + operation_list_run3
            + operation_list_run4
            + operation_list_run5
            + operation_list_run6
        )

        mainTask_df["operation"] = operation_list_allRuns

        # set replacement category
        stim_cats = {"faces", "places", "fruits"}


        def find_replace_cat(row):
            if row["operation"] == "replace":
                present = {row["encode_1_cat"], row["encode_2_cat"]}
                missing = stim_cats - present
                return missing.pop() if missing else "NA"
            else:
                return "NA"


        mainTask_df["replace_cat"] = mainTask_df.apply(find_replace_cat, axis=1)

        # set cue location
        mainTask_cue_loc = (["left" for i in range(1)] + ["right" for i in range(1)]) * 72
        mainTask_df["cue_position"] = mainTask_cue_loc

        # set trial num
        mainTask_trial_num = list(range(1, 25)) * 6
        mainTask_df["trial_num"] = mainTask_trial_num

        # set probe sub-type
        maintain_probes = ["cued", "uncued", "novel", "novel"]
        replace_probes = ["lure", "replacement", "uncued", "novel"]
        suppress_probes = ["lure", "uncued", "uncued", "novel"]
        # iterate through dataframe to add probe_subtypes
        probe_subtype = []
        for i, row in mainTask_df.iterrows():
            # print(i)
            if row["trial_num"] == 1:
                # num_probes * (run_len // (num_probes * num_operations))
                run_maintain_probes = np.random.permutation(maintain_probes * (num_oper_per_run // len(maintain_probes))).tolist()
                run_replace_probes = np.random.permutation(replace_probes * (num_oper_per_run // len(replace_probes))).tolist()
                run_suppress_probes = np.random.permutation(suppress_probes * (num_oper_per_run // len(suppress_probes))).tolist()
            if row["operation"] == "maintain":
                probe_subtype.append(run_maintain_probes.pop())
            elif row["operation"] == "replace":
                probe_subtype.append(run_replace_probes.pop())
            elif row["operation"] == "suppress":
                probe_subtype.append(run_suppress_probes.pop())
        # add column to dataframe
        mainTask_df["probe_subtype"] = probe_subtype

        # set run number
        mainTask_run_num = (
            [1 for i in range(24)]
            + [2 for i in range(24)]
            + [3 for i in range(24)]
            + [4 for i in range(24)]
            + [5 for i in range(24)]
            + [6 for i in range(24)]
        )
        mainTask_df["run_num"] = mainTask_run_num


        # Add jitter, randomized within run
        jitter = []
        for i in range(num_runs):
            jitter += np.random.permutation([3, 4, 5] * int(run_len / 3)).tolist()
        mainTask_df["jitter"] = jitter

        # Add rest trigger
        mainTask_df["rest_trigger"] = [int(r.trial_num == run_len) if i != (total_trials - 1) else 0 for i, r in mainTask_df.iterrows()]

        ## Select stims for each trial
        def select_stim(probecounter, crs_list, stimsdict, useprobe=True,
                        oper=None, cuestatus=None, imgcat=None, reverse=False,):
            # Iterate through the sorted stim list (sorted by number of times used as probe)
            # initiate a counter for the entire stimsdict
            counter = Counter()
            for o in stimsdict:
                for p in stimsdict[o]:
                    for c in stimsdict[o][p]:
                        counter.update(stimsdict[o][p][c])
            # subselect viable list (stim in current condition dict) then sort from most common to least commonly used
            viable_list = [sv for sv in counter.most_common() if sv[0] in stimsdict[oper][cuestatus][imgcat]]
            # iterate from least common to most common
            for value in np.unique([v for _, v in viable_list]):
                # Subselect stims matching the used-value
                stims = [s[0] for s in viable_list if s[1] == value]
                if useprobe:
                    # Sort stims based on number of times probed
                    sortedstims = [k for k in sorted(probecounter.items(), key=lambda x:x[1]) if k[0] in stims]
                    if reverse:
                        sortedstims.reverse()
                else:
                    sortedstims = np.random.permutation(stims)
                # iterate and pull stim
                if useprobe:
                    for val in np.unique([k[1] for k in sortedstims]):
                        substims = np.random.permutation([k[0] for k in sortedstims if k[1] == val])
                        for s in substims:
                            if s not in crs_list:
                                stimsdict[oper][cuestatus][imgcat].remove(s)    # remove stim from stims dict
                                crs_list.append(s)  # add stim to current run stims
                                return s
                else:
                    for s in sortedstims:
                        # find if sim is in current category and if stim has been used in current run
                        if s not in crs_list:
                            stimsdict[oper][cuestatus][imgcat].remove(s)    # remove stim from stims dict
                            crs_list.append(s)    # add stim to current run stims
                            return s
            # print("No stimuli selected")
            return None

        def check_trials(imglist: list, numtrials: int):
            """
            checks a list of dictionaries to ensure that all the necesssary imgs have been selected for each trial in numtrials
            """
            return len([i["left"] for i in imglist if i["left"] is not None]) == numtrials and \
                len([i["right"] for i in imglist if i["right"] is not None]) == numtrials and \
                len([i["replacement"] for i in imglist if i["replacement"] is not None]) == numtrials and \
                len([i["probe"] for i in imglist if i["probe"] is not None]) == numtrials


        # initiate a list to store the stims
        check = False
        retries = 0
        # Set the operation cue images
        opcue_dict = {"maintain": "stimuli/cues/maintain_cue_image.png",
                      "suppress": "stimuli/cues/suppress_cue_image.png",}
        # Build the lists
        while not check:
            # Assign stim to trials
            stims_dict = {}
            # create dictionary for each operation, cue-type and img category 3*2*3*19 = 342
            for oper in ["maintain", "suppress", "replace"]:
                stims_dict[oper] = {}
                for probe in ["cued", "uncued", "replacement"]:
                    if oper != "replace" and probe == "replacement":    # only create replacement category for replace trials
                        continue
                    stims_dict[oper][probe] = {"faces": np.random.permutation(faces_mainTask_list).tolist(),
                                               "places": np.random.permutation(places_mainTask_list).tolist(),
                                               "fruits": np.random.permutation(fruits_mainTask_list).tolist(), }
            # Save novel stims into dict
            novel_stims_dict = {"faces": np.random.permutation(faces_novel_list).tolist(),
                                "places": np.random.permutation(places_novel_list).tolist(),
                                "fruits": np.random.permutation(fruits_novel_list).tolist(), }
            # initiate counter
            timesprobed_counter = Counter(faces_mainTask_list + places_mainTask_list + fruits_mainTask_list)
            # reset the counter to 0
            for entry in timesprobed_counter:
                timesprobed_counter[entry] = 0
            # initiate the image list
            image_list = []
            # Perform the build chunked by run
            for run in range(1, num_runs + 1):
                df = mainTask_df[mainTask_df["run_num"] == run]
                # Loop until run has completed building
                run_check = False
                t = 0
                # Try to use probe as much as possible
                # print("now using probe counter")
                useprobe = True
                while not run_check:
                    random.seed()
                    # initiate a run specific image list
                    run_image_list = []
                    # Initiate list to keep track of images in current run
                    current_run_stims = []
                    # Create copies of the master tracking lists
                    run_timesprobed_counter = copy.deepcopy(timesprobed_counter)
                    run_stims_dict = copy.deepcopy(stims_dict)
                    run_novel_stims_dict = copy.deepcopy(novel_stims_dict)
                    for i, r in df.iterrows():
                        # Determine the image to be probed
                        if r.probe_subtype == "cued" or r.probe_subtype == "lure":
                            probe_pos = r.cue_position
                        elif r.probe_subtype == "uncued":
                            probe_pos = "left" if r.cue_position == "right" else "right"
                        elif r.probe_subtype == "replacement":
                            probe_pos = "replacement"
                        else:
                            probe_pos = None
                        # Find an image for each position
                        images_dict = {}
                        for imgnum in ["left", "right", "replacement"]:
                            # determine the image category
                            if imgnum == "left":
                                imgcat = r.encode_1_cat
                            elif imgnum == "right":
                                imgcat = r.encode_2_cat
                            elif imgnum == "replacement":
                                if r.operation != "replace":
                                    images_dict["replacement"] = opcue_dict[r.operation]
                                    continue
                                else:
                                    imgcat = r.replace_cat
                            # determine cue status for image
                            cue_status = "replacement" if imgnum == "replacement" else ("uncued", "cued")[r.cue_position == imgnum]
                            # select the image
                            # Create sorted lists of stims based on number of times probed
                            if imgnum == probe_pos:
                                img = select_stim(run_timesprobed_counter, current_run_stims, run_stims_dict, useprobe=useprobe,
                                                  oper=r.operation, cuestatus=cue_status, imgcat=imgcat, reverse=False)
                            else:
                                img = select_stim(run_timesprobed_counter, current_run_stims, run_stims_dict, useprobe=useprobe,
                                                  oper=r.operation, cuestatus=cue_status, imgcat=imgcat, reverse=True)
                            # Save the image into the dict
                            images_dict[imgnum] = img
                        # Select a probe image
                        if probe_pos is not None:
                            probe_img = images_dict[probe_pos]
                            # Update the run timesprobed counter
                            run_timesprobed_counter[probe_img] += 1
                        else:
                            probe_cat = np.random.choice([r.encode_1_cat, r.encode_2_cat])
                            probe_img = run_novel_stims_dict[probe_cat].pop()
                        # Save the probe image
                        images_dict["probe"] = probe_img
                        # Save the image dict into the run image list
                        run_image_list.append(images_dict)

                    # Perform a check for the run
                    run_check = check_trials(run_image_list, run_len)
                    # print("run = ", run)
                    # print("runcheck = ", run_check)
                    t += 1
                    if t > 5:
                        # print("now turning useprobe to False")
                        useprobe = False
                    if t > 10:
                        break
                # If run passes check, overwrite all ongoing saves onto counters/lists
                image_list += run_image_list
                timesprobed_counter = run_timesprobed_counter
                stims_dict = run_stims_dict
                novel_stims_dict = run_novel_stims_dict
            if len(image_list) == total_trials:
                print("completed build, now checking...")
                check = check_trials(image_list, total_trials)
            else:
                print(len(image_list))
                print("DNF, restarting...")
                continue
            retries += 1
            if retries > 20:
                break
        if retries > 20:
            # Use a premade stim list
            premade_infile = f"stimuli/csvs/maintask_stimlists/main_stim_list_{random.randint(0,9)}.csv"
            print(f"using pre-made stim list {os.path.split(premade_infile)[1]}")
            mainTask_df = pd.read_csv(premade_infile)
        else:
            # Add stims to df
            mainTask_df["encode_1_img"] = [i["left"] for i in image_list]
            mainTask_df["encode_2_img"] = [i["right"] for i in image_list]
            mainTask_df["replace_img"] = [i["replacement"] for i in image_list]
            mainTask_df["probe_img"] = [i["probe"] for i in image_list]

        mainTask_df_infile = f"{list_foldername}/main_task/main_stim_list.csv"
        # Save to maintask folder
        mainTask_df.to_csv(
            mainTask_df_infile , index=False
        )
        stim_list = mainTask_df_infile
    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to an experiment by the ... Lab!

        This experiment is meant to be run in full-screen mode. DO NOT escape out of the full-screen. Otherwise you will have to restart the entire experiment from the beginning.


        Press <SPACE> to continue
    KeyboardComponent welcome_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Manipulate_Instruct
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  Routine ITI
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    PolygonComponent ITI_fixation
      disabled = True
      fillColor = dimgray
      lineColor = dimgray
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = jitter
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    TextComponent ITI_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = jitter
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  Routine Rest
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    TextComponent rest_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = $f"Rest!\n\nGreat job completing the run! You have completed {run_num} out of 6 runs. You may now take a {30 - t:.0f} second break!"
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    KeyboardComponent rest_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20
      stopVal [time (s)] = 30
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    TextComponent rest_continue_text
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 20
      stopVal [time (s)] = 30
      text = Press <SPACE> if you would like to end the break early!
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  Routine Trial_prepare
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    TextComponent Trial_prepare_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $f"The trial will begin in {5 - t:.0f} s."
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  Routine Encode_instruct
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    ImageComponent encode_instruct_img
      image = instructions/encode_instructions.png
      pos = (0, -0.075)
      size = (1.53, 1)
      startVal [time (s)] = 0.0
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    TextComponent encode_instruct_cont_text
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press <SPACE> to continue.
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    KeyboardComponent encode_instruct_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Oper_screen_instruct
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    ImageComponent operscreen_instruct_img
      image = instructions/oper_screen_instructions.png
      pos = (0, -0.075)
      size = (1.53, 1)
      startVal [time (s)] = 0.0
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    TextComponent operscreen_instruct_cont_text
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press <SPACE> to continue.
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    KeyboardComponent operscreen_instruct_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Operations_instruct
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    ImageComponent operations_instruct_img
      image = instructions/operation_instructions.png
      size = (1.53, 1)
      startVal [time (s)] = 0.0
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    TextComponent operations_instruct_conttext
      letterHeight = 0.04
      pos = (0, -0.43)
      startVal [time (s)] = 0.0
      text = Press <SPACE> to continue.
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    KeyboardComponent operations_instruct_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Probe_screen_instruct
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    ImageComponent probescreen_instruct_img
      image = instructions/probe_screen_instructions.png
      size = (1.47, 0.95)
      startVal [time (s)] = 0.0
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    TextComponent probescreen_instruct_conttext
      letterHeight = 0.04
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Press <SPACE> to continue.
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    KeyboardComponent probescreen_instruct_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Probe_instruct
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    ImageComponent probe_instructions_img
      image = instructions/probe_instructions.png
      size = (1.47, 0.9)
      startVal [time (s)] = 0.0
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    TextComponent probe_instructions_conttext
      letterHeight = 0.04
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Press <SPACE> to continue.
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    KeyboardComponent probe_instructions_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Main_exp_begin
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    TextComponent mainexp_begin_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The main experiment is about to begin.



        Press <ENTER> to continue.
    KeyboardComponent main_exp_begin
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Debrief
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    TextComponent debrief_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        In the experiment, you were asked to encode two items on each trial. You were then cued to manipulate one of the items in your working memory by either maintaining it, suppressing it, or replacing it. We then probed your memory of one item's position. The aim of this study is to test if semantic activation reduces your ability to suppress the individual items in that list. The results of this study will improve our understanding of when people are good at controlling their thoughts and when they are not, which in its extreme could result in symptoms of psychological disorders such as rumination and thought intrusions.

        Your participation is greatly appreciated! If you have any questions, please feel free to email me at {edjoeleung@utexas.edu}. THANK YOU!!
  Routine Practice_begin
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    TextComponent prac_begin_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let's do a couple of practice trials!



        Press <RETURN> to continue.
    KeyboardComponent prac_begin_keyResp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent corrinit_code
      Code Type = Auto->JS
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      Begin Experiment:
        corr = 0
      Begin Routine:
        corr = 0
  Routine Practice_end
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    TextComponent practice_continue_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"That is the end of the practice! Your accuracy was " + str(corr) + "/6.\n\nPress <SPACE> to continue!"
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    KeyboardComponent pracend_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Encode_instruct
  Routine Oper_screen_instruct
  Routine Operations_instruct
  Routine Probe_screen_instruct
  Routine Probe_instruct
  Routine Practice_begin
  Routine Trial_prepare
  LoopInitiator prac_trials loopType="TrialHandler"
    conditionsFile = stimuli/csvs/maintask_stimlists/prac_stim_list.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('encode_1_cat', 'faces'), ('encode_2_cat', 'places'), ('operation', 'maintain'), ('replace_cat', None), ('cue_position', 'left'), ('trial_num', 'prac_1'), ('probe_subtype', 'cued'), ('run_num', 'practice'), ('jitter', 3), ('rest_trigger', 0), ('encode_1_img', 'stimuli/images/faces/michael_phelps.png'), ('encode_2_img', 'stimuli/images/places/river_bridge.png'), ('replace_img', 'stimuli/cues/maintain_cue_image.png'), ('probe_img', 'stimuli/images/faces/michael_phelps.png')]),
      OrderedDict([('encode_1_cat', 'faces'), ('encode_2_cat', 'fruits'), ('operation', 'maintain'), ('replace_cat', None), ('cue_position', 'left'), ('trial_num', 'prac_2'), ('probe_subtype', 'novel'), ('run_num', 'practice'), ('jitter', 4), ('rest_trigger', 0), ('encode_1_img', 'stimuli/images/faces/sandra_bullock.png'), ('encode_2_img', 'stimuli/images/fruits/fresh_red_apple.png'), ('replace_img', 'stimuli/cues/maintain_cue_image.png'), ('probe_img', 'stimuli/images/fruits/pear04.png')]),
      OrderedDict([('encode_1_cat', 'places'), ('encode_2_cat', 'fruits'), ('operation', 'suppress'), ('replace_cat', None), ('cue_position', 'right'), ('trial_num', 'prac_3'), ('probe_subtype', 'uncued'), ('run_num', 'practice'), ('jitter', 3), ('rest_trigger', 0), ('encode_1_img', 'stimuli/images/places/pink_sand_beach.png'), ('encode_2_img', 'stimuli/images/fruits/muskmelon02.png'), ('replace_img', 'stimuli/cues/suppress_cue_image.png'), ('probe_img', 'stimuli/images/places/pink_sand_beach.png')]),
      OrderedDict([('encode_1_cat', 'fruits'), ('encode_2_cat', 'faces'), ('operation', 'suppress'), ('replace_cat', None), ('cue_position', 'right'), ('trial_num', 'prac_4'), ('probe_subtype', 'lure'), ('run_num', 'practice'), ('jitter', 5), ('rest_trigger', 0), ('encode_1_img', 'stimuli/images/fruits/honeydew.png'), ('encode_2_img', 'stimuli/images/faces/maria_sharapova.png'), ('replace_img', 'stimuli/cues/suppress_cue_image.png'), ('probe_img', 'stimuli/images/faces/maria_sharapova.png')])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
    Routine Encode
    Routine Delay_2000
    Routine Manipulate
    Routine Delay_4000
    Routine Probe
    Routine ITI
  LoopTerminator prac_trials
  Routine Practice_end
  Routine Main_exp_begin
  Routine Trial_prepare
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $stim_list
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('encode_1_cat', 'faces'), ('encode_2_cat', 'places'), ('operation', 'maintain'), ('replace_cat', None), ('cue_position', 'left'), ('trial_num', 1), ('probe_subtype', 'cued'), ('run_num', 1), ('jitter', 4), ('rest_trigger', 0), ('encode_1_img', 'stimuli/images/faces/lebron.png'), ('encode_2_img', 'stimuli/images/places/cinderella_castle.png'), ('replace_img', 'stimuli/cues/maintain_cue_image.png'), ('probe_img', 'stimuli/images/faces/lebron.png')]),
      OrderedDict([('encode_1_cat', 'faces'), ('encode_2_cat', 'places'), ('operation', 'maintain'), ('replace_cat', None), ('cue_position', 'right'), ('trial_num', 2), ('probe_subtype', 'cued'), ('run_num', 1), ('jitter', 4), ('rest_trigger', 0), ('encode_1_img', 'stimuli/images/faces/aaron_rodgers.png'), ('encode_2_img', 'stimuli/images/places/flatiron_building.png'), ('replace_img', 'stimuli/cues/maintain_cue_image.png'), ('probe_img', 'stimuli/images/places/flatiron_building.png')]),
      OrderedDict([('encode_1_cat', 'faces'), ('encode_2_cat', 'places'), ('operation', 'suppress'), ('replace_cat', None), ('cue_position', 'left'), ('trial_num', 3), ('probe_subtype', 'uncued'), ('run_num', 1), ('jitter', 3), ('rest_trigger', 0), ('encode_1_img', 'stimuli/images/faces/scarlett_johansson.png'), ('encode_2_img', 'stimuli/images/places/unique_mountains.png'), ('replace_img', 'stimuli/cues/suppress_cue_image.png'), ('probe_img', 'stimuli/images/places/unique_mountains.png')]),
      OrderedDict([('encode_1_cat', 'faces'), ('encode_2_cat', 'places'), ('operation', 'suppress'), ('replace_cat', None), ('cue_position', 'right'), ('trial_num', 4), ('probe_subtype', 'lure'), ('run_num', 1), ('jitter', 4), ('rest_trigger', 0), ('encode_1_img', 'stimuli/images/faces/macklemore.png'), ('encode_2_img', 'stimuli/images/places/skyway_bridge.png'), ('replace_img', 'stimuli/cues/suppress_cue_image.png'), ('probe_img', 'stimuli/images/places/skyway_bridge.png')])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
    Routine Encode
    Routine Delay_2000
    Routine Manipulate
    Routine Delay_4000
    Routine Probe
    Routine ITI
    LoopInitiator rest_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = rest_trigger
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      Routine Rest
      Routine Trial_prepare
    LoopTerminator rest_loop
  LoopTerminator trials
  Routine Debrief
